<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:vh1="clr-namespace:Harp.VestibularH1;assembly=Harp.VestibularH1"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:vh2="clr-namespace:Harp.VestibularH2;assembly=Harp.VestibularH2"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p2="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Path" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:LoadArenaSettings">
          <p1:Path>C:\Users\ONIX\source\ae-dev\vestibular-vr\src\vr-arena-session.yml</p1:Path>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>ArenaSettings</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>1920</gl:Width>
          <gl:Height>720</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Third</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:TextureResources">
          <gl:Textures>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>horGrat</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>C:\Users\ONIX\source\ae-dev\vestibular-vr\Textures\horGrat.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>plaid</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>C:\Users\ONIX\source\ae-dev\vestibular-vr\Textures\plaid.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>vertGrat</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>C:\Users\ONIX\source\ae-dev\vestibular-vr\Textures\vertGrat.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
          </gl:Textures>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:MeshResources">
          <gl:Meshes>
            <gl:MeshConfiguration xsi:type="gl:TexturedModel">
              <gl:Name>cylinder</gl:Name>
              <gl:FileName>C:\Users\ONIX\source\ae-dev\vestibular-vr\Models\cylinder.obj</gl:FileName>
            </gl:MeshConfiguration>
            <gl:MeshConfiguration xsi:type="gl:TexturedModel">
              <gl:Name>icosphere</gl:Name>
              <gl:FileName>C:\Users\ONIX\source\ae-dev\vestibular-vr\Models\icosphere.obj</gl:FileName>
            </gl:MeshConfiguration>
          </gl:Meshes>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CurrentPosition</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Eye" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.CubemapView.bonsai">
        <Eye>
          <X>0</X>
          <Y>0</Y>
          <Z>-18</Z>
        </Eye>
        <NearClip>0.1</NearClip>
        <FarClip>1000</FarClip>
        <Light>
          <X>0</X>
          <Y>20</Y>
          <Z>0</Z>
        </Light>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>DrawCall</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderCubemap">
          <gl:RenderState />
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:FaceSize xsi:nil="true" />
          <gl:InternalFormat>Rgb</gl:InternalFormat>
          <gl:MinFilter>Linear</gl:MinFilter>
          <gl:MagFilter>Linear</gl:MagFilter>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>FrontView</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Width" />
              <Property Name="Height" />
              <Property Name="Rotation" />
              <Property Name="Translation" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>0.54</Width>
              <Height>0.3</Height>
              <Rotation>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>0</X>
                <Y>0</Y>
                <Z>0.3</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="X" />
              <Property Name="Y" />
              <Property Name="Width" DisplayName="W" />
              <Property Name="Height" DisplayName="H" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0</X>
              <Y>0</Y>
              <Width>0.25</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LeftView</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Width" />
              <Property Name="Height" />
              <Property Name="Rotation" />
              <Property Name="Translation" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>0.54</Width>
              <Height>0.3</Height>
              <Rotation>
                <X>0</X>
                <Y>90.0000025044782</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>-0.3</X>
                <Y>0</Y>
                <Z>0</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="X" />
              <Property Name="Y" />
              <Property Name="Width" DisplayName="W" />
              <Property Name="Height" DisplayName="H" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.25</X>
              <Y>0</Y>
              <Width>0.25</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BackView</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Width" />
              <Property Name="Height" />
              <Property Name="Rotation" />
              <Property Name="Translation" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>0.54</Width>
              <Height>0.3</Height>
              <Rotation>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>0</X>
                <Y>0</Y>
                <Z>-0.3</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="X" />
              <Property Name="Y" />
              <Property Name="Width" DisplayName="W" />
              <Property Name="Height" DisplayName="H" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.5</X>
              <Y>0</Y>
              <Width>0.25</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>RightView</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Width" />
              <Property Name="Height" />
              <Property Name="Rotation" />
              <Property Name="Translation" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>0.54</Width>
              <Height>0.3</Height>
              <Rotation>
                <X>0</X>
                <Y>-90.000002504478161</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>0.3</X>
                <Y>0</Y>
                <Z>0</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="X" />
              <Property Name="Y" />
              <Property Name="Width" DisplayName="W" />
              <Property Name="Height" DisplayName="H" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.75</X>
              <Y>0</Y>
              <Width>0.25</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="StartCamerasKey" />
        <Property Name="StopCamerasKey" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CameraControl</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>ArenaSettings</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="vh1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="vh1:CreateStartAndStopPayload">
                <vh1:StartAndStop>StopCam0</vh1:StartAndStop>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="vh1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="vh1:CreateStartAndStopPayload">
                <vh1:StartAndStop>StopCam1</vh1:StartAndStop>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ArenaSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>CameraSettings.CameraFrequency1</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Cam0TriggerFrequency" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="vh1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="vh1:CreateCam0TriggerFrequencyPayload">
                <vh1:Cam0TriggerFrequency>100</vh1:Cam0TriggerFrequency>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ArenaSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>CameraSettings.CameraExposure1</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Cam0TriggerDuration" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="vh1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="vh1:CreateCam0TriggerDurationPayload">
                <vh1:Cam0TriggerDuration>5000</vh1:Cam0TriggerDuration>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ArenaSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>CameraSettings.CameraFrequency1</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Cam1TriggerFrequency" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="vh1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="vh1:CreateCam1TriggerFrequencyPayload">
                <vh1:Cam1TriggerFrequency>100</vh1:Cam1TriggerFrequency>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ArenaSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>CameraSettings.CameraExposure2</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Cam1TriggerDuration" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="vh1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="vh1:CreateCam1TriggerDurationPayload">
                <vh1:Cam1TriggerDuration>5000</vh1:Cam1TriggerDuration>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>H1Commands</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="StartCamerasKey" Category="CameraControl" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>LButton RButton Cancel A B C Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="vh1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="vh1:CreateStartAndStopPayload">
                <vh1:StartAndStop>StartCam0</vh1:StartAndStop>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="vh1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="vh1:CreateStartAndStopPayload">
                <vh1:StartAndStop>StartCam1</vh1:StartAndStop>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>H1Commands</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="StopCamerasKey" Category="CameraControl" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>MButton D Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="vh1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="vh1:CreateStartAndStopPayload">
                <vh1:StartAndStop>StopCam0</vh1:StartAndStop>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="vh1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="vh1:CreateStartAndStopPayload">
                <vh1:StartAndStop>StopCam1</vh1:StartAndStop>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>H1Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>H1Events</Name>
            </Expression>
            <Expression xsi:type="vh1:Parse">
              <harp:Register xsi:type="vh1:TimestampedCam0Event" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="SerialNumber" DisplayName="Camera1SerialNumber" Category="CameraControl" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="aeon:SpinnakerCapture">
                <spk:Index xsi:nil="true" />
                <spk:SerialNumber>21205223</spk:SerialNumber>
                <spk:ColorProcessing>Default</spk:ColorProcessing>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Camera1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>H1Events</Name>
            </Expression>
            <Expression xsi:type="vh1:Parse">
              <harp:Register xsi:type="vh1:TimestampedCam1Event" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="SerialNumber" DisplayName="Camera2SerialNumber" Category="CameraControl" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="aeon:SpinnakerCapture">
                <spk:Index xsi:nil="true" />
                <spk:SerialNumber>22085343</spk:SerialNumber>
                <spk:ColorProcessing>Default</spk:ColorProcessing>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Camera2</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="0" To="10" Label="Source1" />
            <Edge From="0" To="15" Label="Source1" />
            <Edge From="0" To="20" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="25" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="25" Label="Source2" />
            <Edge From="5" To="9" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="25" Label="Source3" />
            <Edge From="10" To="14" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="25" Label="Source4" />
            <Edge From="15" To="19" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="25" Label="Source5" />
            <Edge From="20" To="24" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source2" />
            <Edge From="24" To="25" Label="Source6" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="28" To="30" Label="Source1" />
            <Edge From="29" To="31" Label="Source1" />
            <Edge From="30" To="31" Label="Source2" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="34" To="36" Label="Source1" />
            <Edge From="35" To="37" Label="Source1" />
            <Edge From="36" To="37" Label="Source2" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="39" To="40" Label="Source1" />
            <Edge From="40" To="42" Label="Source1" />
            <Edge From="41" To="42" Label="Source2" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="44" To="45" Label="Source1" />
            <Edge From="45" To="47" Label="Source1" />
            <Edge From="46" To="47" Label="Source2" />
            <Edge From="47" To="48" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="HomePlatform" />
        <Property Name="StepCCW" />
        <Property Name="StepCW" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>H2Hardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>H2Commands</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="vh2:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Enabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM11</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>H2Events</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>H2Events</Name>
            </Expression>
            <Expression xsi:type="vh2:FilterRegister">
              <harp:FilterType>Include</harp:FilterType>
              <harp:Register xsi:type="vh2:Encoder" />
            </Expression>
            <Expression xsi:type="vh2:Parse">
              <harp:Register xsi:type="vh2:TimestampedEncoder" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>RotaryEncoder</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>H2Events</Name>
            </Expression>
            <Expression xsi:type="harp:FilterRegister">
              <harp:FilterType>Include</harp:FilterType>
              <harp:Register xsi:type="harp:FilterRegisterAddress">
                <harp:Address>39</harp:Address>
              </harp:Register>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Register xsi:type="harp:ParseMessagePayload">
                <harp:PayloadType>TimestampedS16</harp:PayloadType>
                <harp:IsArray>false</harp:IsArray>
              </harp:Register>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>HallSensor</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>PlatformHomed</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
              <rx:Name>PlatformHomed</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p2:Unit">
              <rx:Name>HomePlatform</rx:Name>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>HomePlatform</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HallSensor</Name>
                  </Expression>
                  <Expression xsi:type="LessThan">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int16">
                      <Value>200</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Home</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="vh2:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="vh2:CreateImmediatePulsesPayload">
                      <vh2:ImmediatePulses>0</vh2:ImmediatePulses>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>H2Commands</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>PlatformHomed</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>PlatformHomed</Name>
                  </Expression>
                  <Expression xsi:type="vh2:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="vh2:CreateImmediatePulsesPayload">
                      <vh2:ImmediatePulses>200</vh2:ImmediatePulses>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>H2Commands</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Switch" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Int32">
              <rx:Name>StepPlatform</rx:Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>StepPlatform</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>StepPulseInterval</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StepPulseInterval</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ImmediatePulses" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="vh2:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="vh2:CreateImmediatePulsesPayload">
                      <vh2:ImmediatePulses>1600</vh2:ImmediatePulses>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>H2Commands</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="vh2:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="vh2:CreateImmediatePulsesPayload">
                      <vh2:ImmediatePulses>0</vh2:ImmediatePulses>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>H2Commands</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="HomePlatform" Category="PlatformControl" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Back H Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="MulticastSubject">
              <Name>HomePlatform</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="StepCCW" Category="PlatformControl" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>LButton MButton XButton1 Space Prior PageUp Home Left Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>500</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StepPlatform</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="StepCW" Category="PlatformControl" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>LButton RButton Cancel MButton XButton1 XButton2 Space Prior PageUp Next PageDown End Home Left Up Right Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>-500</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StepPlatform</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ArenaSettings</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="vh2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="vh2:CreateControlPayload">
                <vh2:Control>DisableMotor</vh2:Control>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="vh2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="vh2:CreateControlPayload">
                <vh2:Control>DisableAnalogInput</vh2:Control>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="vh2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="vh2:CreateControlPayload">
                <vh2:Control>DisableEncoder</vh2:Control>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="vh2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="vh2:CreateControlPayload">
                <vh2:Control>ResetEncoder</vh2:Control>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="vh2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="vh2:CreateControlPayload">
                <vh2:Control>EnableMotor</vh2:Control>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="vh2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="vh2:CreateControlPayload">
                <vh2:Control>EnableAnalogInput</vh2:Control>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="vh2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="vh2:CreateControlPayload">
                <vh2:Control>EnableEncoder</vh2:Control>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>MotorSettings.NominalPulseInterval</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="NominalPulseInterval" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="vh2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="vh2:CreateNominalPulseIntervalPayload">
                <vh2:NominalPulseInterval>200</vh2:NominalPulseInterval>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>MotorSettings.InitialPulseInterval</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="InitialPulseInterval" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="vh2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="vh2:CreateInitialPulseIntervalPayload">
                <vh2:InitialPulseInterval>200</vh2:InitialPulseInterval>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>MotorSettings.PulseStepInterval</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PulseStepInterval" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="vh2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="vh2:CreatePulseStepIntervalPayload">
                <vh2:PulseStepInterval>2</vh2:PulseStepInterval>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>MotorSettings.PulsePeriod</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PulsePeriod" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="vh2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="vh2:CreatePulsePeriodPayload">
                <vh2:PulsePeriod>10</vh2:PulsePeriod>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>H2Commands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="34" To="40" Label="Source1" />
            <Edge From="34" To="44" Label="Source1" />
            <Edge From="34" To="47" Label="Source1" />
            <Edge From="34" To="50" Label="Source1" />
            <Edge From="34" To="53" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="35" To="37" Label="Source1" />
            <Edge From="35" To="38" Label="Source1" />
            <Edge From="35" To="39" Label="Source1" />
            <Edge From="36" To="56" Label="Source1" />
            <Edge From="37" To="56" Label="Source2" />
            <Edge From="38" To="56" Label="Source3" />
            <Edge From="39" To="56" Label="Source4" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="40" To="42" Label="Source1" />
            <Edge From="40" To="43" Label="Source1" />
            <Edge From="40" To="46" Label="Source2" />
            <Edge From="40" To="49" Label="Source2" />
            <Edge From="40" To="52" Label="Source2" />
            <Edge From="40" To="55" Label="Source2" />
            <Edge From="41" To="56" Label="Source5" />
            <Edge From="42" To="56" Label="Source6" />
            <Edge From="43" To="56" Label="Source7" />
            <Edge From="44" To="45" Label="Source1" />
            <Edge From="45" To="46" Label="Source1" />
            <Edge From="46" To="56" Label="Source8" />
            <Edge From="47" To="48" Label="Source1" />
            <Edge From="48" To="49" Label="Source1" />
            <Edge From="49" To="56" Label="Source9" />
            <Edge From="50" To="51" Label="Source1" />
            <Edge From="51" To="52" Label="Source1" />
            <Edge From="52" To="56" Label="Source10" />
            <Edge From="53" To="54" Label="Source1" />
            <Edge From="54" To="55" Label="Source1" />
            <Edge From="55" To="56" Label="Source11" />
            <Edge From="56" To="57" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>H1Hardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>H1Commands</rx:Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="vh1:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Enabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM12</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>H1Events</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>H1Events</Name>
            </Expression>
            <Expression xsi:type="vh1:FilterRegister">
              <harp:FilterType>Include</harp:FilterType>
              <harp:Register xsi:type="vh1:OpticalTrackingRead" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>FlowSensorRead</Name>
            </Expression>
            <Expression xsi:type="vh1:Parse">
              <harp:Register xsi:type="vh1:TimestampedOpticalTrackingRead" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>FlowSensor</scr:Name>
              <scr:Expression>new (
  it.Item1 as X,
  it.Item2 as Y,
  it.Item3 as Brightness
)</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>FlowSensor1</Name>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>3</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>4</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>FlowSensor</scr:Name>
              <scr:Expression>new (
  it.Item1 as X,
  it.Item2 as Y,
  it.Item3 as Brightness
)</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>FlowSensor2</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="9" To="12" Label="Source1" />
            <Edge From="9" To="16" Label="Source1" />
            <Edge From="9" To="17" Label="Source1" />
            <Edge From="9" To="18" Label="Source1" />
            <Edge From="10" To="13" Label="Source1" />
            <Edge From="11" To="13" Label="Source2" />
            <Edge From="12" To="13" Label="Source3" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="19" Label="Source1" />
            <Edge From="17" To="19" Label="Source2" />
            <Edge From="18" To="19" Label="Source3" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DrawArena</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawCall</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:BindTexture">
                <gl:TextureSlot>Texture0</gl:TextureSlot>
                <gl:ShaderName>TexturedModel</gl:ShaderName>
                <gl:TextureName>plaid</gl:TextureName>
                <gl:TextureTarget>Texture2D</gl:TextureTarget>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ArenaSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.ArenaSize</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ScaleX" />
                <Property Name="ScaleY" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
              <TranslationX>0</TranslationX>
              <TranslationY>-1</TranslationY>
              <TranslationZ>0</TranslationZ>
              <RotationZ>0</RotationZ>
              <RotationY>0</RotationY>
              <RotationX>90</RotationX>
              <ScaleX>120</ScaleX>
              <ScaleY>120</ScaleY>
              <ScaleZ>1</ScaleZ>
              <Ambient>
                <X>0.2</X>
                <Y>0.2</Y>
                <Z>0.2</Z>
              </Ambient>
              <Diffuse>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Diffuse>
              <Specular>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Specular>
              <SpecularExponent>10</SpecularExponent>
              <MeshName>Plane</MeshName>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawCall</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:BindTexture">
                <gl:TextureSlot>Texture0</gl:TextureSlot>
                <gl:ShaderName>TexturedModel</gl:ShaderName>
                <gl:TextureName>vertGrat</gl:TextureName>
                <gl:TextureTarget>Texture2D</gl:TextureTarget>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ArenaSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.ArenaSize</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ScaleX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Divide">
              <Operand xsi:type="DoubleProperty">
                <Value>-2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="TranslationX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
              <TranslationX>-60</TranslationX>
              <TranslationY>0</TranslationY>
              <TranslationZ>0</TranslationZ>
              <RotationZ>0</RotationZ>
              <RotationY>90</RotationY>
              <RotationX>0</RotationX>
              <ScaleX>120</ScaleX>
              <ScaleY>10</ScaleY>
              <ScaleZ>1</ScaleZ>
              <Ambient>
                <X>0.2</X>
                <Y>0.2</Y>
                <Z>0.2</Z>
              </Ambient>
              <Diffuse>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Diffuse>
              <Specular>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Specular>
              <SpecularExponent>10</SpecularExponent>
              <MeshName>Plane</MeshName>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawCall</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:BindTexture">
                <gl:TextureSlot>Texture0</gl:TextureSlot>
                <gl:ShaderName>TexturedModel</gl:ShaderName>
                <gl:TextureName>vertGrat</gl:TextureName>
                <gl:TextureTarget>Texture2D</gl:TextureTarget>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ArenaSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.ArenaSize</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ScaleX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Divide">
              <Operand xsi:type="DoubleProperty">
                <Value>-2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="TranslationZ" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
              <TranslationX>0</TranslationX>
              <TranslationY>0</TranslationY>
              <TranslationZ>-60</TranslationZ>
              <RotationZ>0</RotationZ>
              <RotationY>0</RotationY>
              <RotationX>0</RotationX>
              <ScaleX>120</ScaleX>
              <ScaleY>10</ScaleY>
              <ScaleZ>1</ScaleZ>
              <Ambient>
                <X>1</X>
                <Y>0</Y>
                <Z>0</Z>
              </Ambient>
              <Diffuse>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Diffuse>
              <Specular>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Specular>
              <SpecularExponent>10</SpecularExponent>
              <MeshName>Plane</MeshName>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawCall</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:BindTexture">
                <gl:TextureSlot>Texture0</gl:TextureSlot>
                <gl:ShaderName>TexturedModel</gl:ShaderName>
                <gl:TextureName>vertGrat</gl:TextureName>
                <gl:TextureTarget>Texture2D</gl:TextureTarget>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ArenaSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.ArenaSize</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ScaleX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Divide">
              <Operand xsi:type="DoubleProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="TranslationX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
              <TranslationX>60</TranslationX>
              <TranslationY>0</TranslationY>
              <TranslationZ>0</TranslationZ>
              <RotationZ>0</RotationZ>
              <RotationY>90</RotationY>
              <RotationX>0</RotationX>
              <ScaleX>120</ScaleX>
              <ScaleY>10</ScaleY>
              <ScaleZ>1</ScaleZ>
              <Ambient>
                <X>0</X>
                <Y>0</Y>
                <Z>1</Z>
              </Ambient>
              <Diffuse>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Diffuse>
              <Specular>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Specular>
              <SpecularExponent>10</SpecularExponent>
              <MeshName>Plane</MeshName>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawCall</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:BindTexture">
                <gl:TextureSlot>Texture0</gl:TextureSlot>
                <gl:ShaderName>TexturedModel</gl:ShaderName>
                <gl:TextureName>vertGrat</gl:TextureName>
                <gl:TextureTarget>Texture2D</gl:TextureTarget>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ArenaSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.ArenaSize</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ScaleX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Divide">
              <Operand xsi:type="DoubleProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="TranslationZ" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
              <TranslationX>0</TranslationX>
              <TranslationY>0</TranslationY>
              <TranslationZ>60</TranslationZ>
              <RotationZ>0</RotationZ>
              <RotationY>0</RotationY>
              <RotationX>0</RotationX>
              <ScaleX>120</ScaleX>
              <ScaleY>10</ScaleY>
              <ScaleZ>1</ScaleZ>
              <Ambient>
                <X>0</X>
                <Y>1</Y>
                <Z>0</Z>
              </Ambient>
              <Diffuse>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Diffuse>
              <Specular>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Specular>
              <SpecularExponent>10</SpecularExponent>
              <MeshName>Plane</MeshName>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="13" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="13" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source3" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="21" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="17" To="19" Label="Source1" />
            <Edge From="18" To="21" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source3" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="29" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="25" To="27" Label="Source1" />
            <Edge From="26" To="29" Label="Source2" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source3" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="37" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="33" To="35" Label="Source1" />
            <Edge From="34" To="37" Label="Source2" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source3" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>PositionUpdates</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateVector3">
                <gl:X>0</gl:X>
                <gl:Y>0</gl:Y>
                <gl:Z>-18</gl:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CurrentPosition</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateQuaternionRotation">
                <gl:Rotation>
                  <gl:Xyz>
                    <gl:X>0</gl:X>
                    <gl:Y>0</gl:Y>
                    <gl:Z>0</gl:Z>
                  </gl:Xyz>
                  <gl:W>1</gl:W>
                </gl:Rotation>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CurrentRotation</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateVector3">
                <gl:X>0</gl:X>
                <gl:Y>0</gl:Y>
                <gl:Z>1</gl:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ForwardVector</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FlowSensor1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Y</Selector>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>RotationDelta</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>X</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToSingle(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>ForwardDelta</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ForwardDelta</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ArenaSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.FlowToVisualTranslation</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="FloatProperty">
                <Value>0.0008</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ForwardVector</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Multiply" />
            <Expression xsi:type="SubscribeSubject">
              <Name>CurrentPosition</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="SubscribeSubject">
              <Name>ArenaSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.ArenaSize</Selector>
            </Expression>
            <Expression xsi:type="Divide">
              <Operand xsi:type="DoubleProperty">
                <Value>-2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Subtract">
              <Operand xsi:type="DoubleProperty">
                <Value>-1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="X" Selector="it" />
                <Property Name="Y" Selector="it" />
                <Property Name="Z" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateVector3">
                <gl:X>-59</gl:X>
                <gl:Y>-59</gl:Y>
                <gl:Z>-59</gl:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="MinVector" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Divide">
              <Operand xsi:type="DoubleProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Subtract">
              <Operand xsi:type="DoubleProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="X" Selector="it" />
                <Property Name="Y" Selector="it" />
                <Property Name="Z" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateVector3">
                <gl:X>59</gl:X>
                <gl:Y>59</gl:Y>
                <gl:Z>59</gl:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="MaxVector" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:ClampVector">
                <p1:MinVector>
                  <p1:X>-59</p1:X>
                  <p1:Y>-59</p1:Y>
                  <p1:Z>-59</p1:Z>
                </p1:MinVector>
                <p1:MaxVector>
                  <p1:X>59</p1:X>
                  <p1:Y>59</p1:Y>
                  <p1:Z>59</p1:Z>
                </p1:MaxVector>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CurrentPosition</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RotationDelta</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ArenaSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.FlowToMotorGain</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="FloatProperty">
                <Value>-4</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>ApplyMotorMotion</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:ToPulseInterval">
                      <p1:ZeroThreshold>1E-06</p1:ZeroThreshold>
                      <p1:MaxValue>0.02</p1:MaxValue>
                      <p1:MinValue>2.5E-05</p1:MinValue>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ImmediatePulses" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="vh2:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="vh2:CreateImmediatePulsesPayload">
                      <vh2:ImmediatePulses>0</vh2:ImmediatePulses>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>H2Commands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RotaryEncoder</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Difference">
                <dsp:Order>1</dsp:Order>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>(Math.PI / 180) * ((it / 24000) * 360)</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>EncoderDelta</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EncoderDelta</Name>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateTransform">
                <gl:Position>
                  <gl:X>0</gl:X>
                  <gl:Y>0</gl:Y>
                  <gl:Z>1</gl:Z>
                </gl:Position>
                <gl:Rotation>
                  <gl:Xyz>
                    <gl:X>0</gl:X>
                    <gl:Y>0</gl:Y>
                    <gl:Z>0</gl:Z>
                  </gl:Xyz>
                  <gl:W>1</gl:W>
                </gl:Rotation>
                <gl:Scale>
                  <gl:X>1</gl:X>
                  <gl:Y>1</gl:Y>
                  <gl:Z>1</gl:Z>
                </gl:Scale>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Angle" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RotateAxisAngle">
                <gl:Order>Append</gl:Order>
                <gl:Axis>
                  <gl:X>0</gl:X>
                  <gl:Y>1</gl:Y>
                  <gl:Z>0</gl:Z>
                </gl:Axis>
                <gl:Angle>0.002094395</gl:Angle>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:ExtractTranslation" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ForwardVector</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="16" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="18" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="21" Label="Source1" />
            <Edge From="20" To="21" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="35" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="24" To="30" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="35" Label="Source2" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source3" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="37" To="41" Label="Source1" />
            <Edge From="38" To="39" Label="Source1" />
            <Edge From="39" To="40" Label="Source1" />
            <Edge From="40" To="41" Label="Source2" />
            <Edge From="41" To="42" Label="Source1" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="44" To="45" Label="Source1" />
            <Edge From="45" To="46" Label="Source1" />
            <Edge From="47" To="48" Label="Source1" />
            <Edge From="48" To="49" Label="Source1" />
            <Edge From="48" To="50" Label="Source1" />
            <Edge From="49" To="51" Label="Source1" />
            <Edge From="50" To="51" Label="Source2" />
            <Edge From="51" To="52" Label="Source1" />
            <Edge From="52" To="53" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Camera1</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Image</Selector>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>ArenaSettings</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>DrawObject</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>DrawCall</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>ArenaSettings</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Index">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawModel.bonsai">
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        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="12" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="14" To="16" Label="Source1" />
      <Edge From="14" To="17" Label="Source1" />
      <Edge From="14" To="18" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="33" To="45" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="36" To="39" Label="Source1" />
      <Edge From="36" To="41" Label="Source1" />
      <Edge From="36" To="43" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="45" Label="Source2" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="45" Label="Source3" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="45" Label="Source4" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source5" />
    </Edges>
  </Workflow>
</WorkflowBuilder>