<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Third</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:TextureResources">
          <gl:Textures>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>horGrat</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>C:\Users\neurogears\source\repos\vestibular-vr\Textures\horGrat.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>plaid</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>C:\Users\neurogears\source\repos\vestibular-vr\Textures\plaid.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>vertGrat</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>C:\Users\neurogears\source\repos\vestibular-vr\Textures\vertGrat.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:Texture2D">
              <gl:Name>Blank</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
            </gl:TextureConfiguration>
          </gl:Textures>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:MeshResources">
          <gl:Meshes>
            <gl:MeshConfiguration xsi:type="gl:TexturedModel">
              <gl:Name>suzanne</gl:Name>
              <gl:FileName>C:\Users\neurogears\source\repos\vestibular-vr\Models\suzanne.obj</gl:FileName>
            </gl:MeshConfiguration>
            <gl:MeshConfiguration xsi:type="gl:TexturedModel">
              <gl:Name>cylinder</gl:Name>
              <gl:FileName>C:\Users\neurogears\source\repos\vestibular-vr\Models\cylinder.obj</gl:FileName>
            </gl:MeshConfiguration>
            <gl:MeshConfiguration xsi:type="gl:TexturedModel">
              <gl:Name>icosphere</gl:Name>
              <gl:FileName>C:\Users\neurogears\source\repos\vestibular-vr\Models\icosphere.obj</gl:FileName>
            </gl:MeshConfiguration>
          </gl:Meshes>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.CubemapView.bonsai">
        <Eye>
          <X>0</X>
          <Y>15</Y>
          <Z>0</Z>
        </Eye>
        <NearClip>0.1</NearClip>
        <FarClip>1000</FarClip>
        <Light>
          <X>0</X>
          <Y>20</Y>
          <Z>0</Z>
        </Light>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>DrawCall</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderCubemap">
          <gl:RenderState />
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:FaceSize xsi:nil="true" />
          <gl:InternalFormat>Rgb</gl:InternalFormat>
          <gl:MinFilter>Linear</gl:MinFilter>
          <gl:MagFilter>Linear</gl:MagFilter>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
        <Width>0.54</Width>
        <Height>0.3</Height>
        <Rotation>
          <X>90.000002504478161</X>
          <Y>0</Y>
          <Z>0</Z>
        </Rotation>
        <Translation>
          <X>0</X>
          <Y>-0.3</Y>
          <Z>0</Z>
        </Translation>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
        <X>0</X>
        <Y>0</Y>
        <Width>1</Width>
        <Height>1</Height>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawCall</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:BindTexture">
          <gl:TextureSlot>Texture0</gl:TextureSlot>
          <gl:ShaderName>TexturedModel</gl:ShaderName>
          <gl:TextureName>plaid</gl:TextureName>
          <gl:TextureTarget>Texture2D</gl:TextureTarget>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
        <TranslationX>0</TranslationX>
        <TranslationY>0</TranslationY>
        <TranslationZ>0</TranslationZ>
        <RotationZ>0</RotationZ>
        <RotationY>0</RotationY>
        <RotationX>90</RotationX>
        <ScaleX>10</ScaleX>
        <ScaleY>10</ScaleY>
        <ScaleZ>1</ScaleZ>
        <Ambient>
          <X>0.2</X>
          <Y>0.2</Y>
          <Z>0.2</Z>
        </Ambient>
        <Diffuse>
          <X>0.8</X>
          <Y>0.8</Y>
          <Z>0.8</Z>
        </Diffuse>
        <Specular>
          <X>0.8</X>
          <Y>0.8</Y>
          <Z>0.8</Z>
        </Specular>
        <SpecularExponent>10</SpecularExponent>
        <MeshName>Plane</MeshName>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:BindTexture">
          <gl:TextureSlot>Texture0</gl:TextureSlot>
          <gl:ShaderName>TexturedModel</gl:ShaderName>
          <gl:TextureName>vertGrat</gl:TextureName>
          <gl:TextureTarget>Texture2D</gl:TextureTarget>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
        <TranslationX>0</TranslationX>
        <TranslationY>0</TranslationY>
        <TranslationZ>5</TranslationZ>
        <RotationZ>0</RotationZ>
        <RotationY>0</RotationY>
        <RotationX>0</RotationX>
        <ScaleX>10</ScaleX>
        <ScaleY>10</ScaleY>
        <ScaleZ>1</ScaleZ>
        <Ambient>
          <X>0.2</X>
          <Y>0.2</Y>
          <Z>0.2</Z>
        </Ambient>
        <Diffuse>
          <X>0.8</X>
          <Y>0.8</Y>
          <Z>0.8</Z>
        </Diffuse>
        <Specular>
          <X>0.8</X>
          <Y>0.8</Y>
          <Z>0.8</Z>
        </Specular>
        <SpecularExponent>10</SpecularExponent>
        <MeshName>Plane</MeshName>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:BindTexture">
          <gl:TextureSlot>Texture0</gl:TextureSlot>
          <gl:ShaderName>TexturedModel</gl:ShaderName>
          <gl:TextureName>vertGrat</gl:TextureName>
          <gl:TextureTarget>Texture2D</gl:TextureTarget>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
        <TranslationX>5</TranslationX>
        <TranslationY>0</TranslationY>
        <TranslationZ>0</TranslationZ>
        <RotationZ>0</RotationZ>
        <RotationY>90</RotationY>
        <RotationX>0</RotationX>
        <ScaleX>10</ScaleX>
        <ScaleY>10</ScaleY>
        <ScaleZ>1</ScaleZ>
        <Ambient>
          <X>0.2</X>
          <Y>0.2</Y>
          <Z>0.2</Z>
        </Ambient>
        <Diffuse>
          <X>0.8</X>
          <Y>0.8</Y>
          <Z>0.8</Z>
        </Diffuse>
        <Specular>
          <X>0.8</X>
          <Y>0.8</Y>
          <Z>0.8</Z>
        </Specular>
        <SpecularExponent>10</SpecularExponent>
        <MeshName>Plane</MeshName>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:BindTexture">
          <gl:TextureSlot>Texture0</gl:TextureSlot>
          <gl:ShaderName>TexturedModel</gl:ShaderName>
          <gl:TextureName>vertGrat</gl:TextureName>
          <gl:TextureTarget>Texture2D</gl:TextureTarget>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
        <TranslationX>0</TranslationX>
        <TranslationY>0</TranslationY>
        <TranslationZ>-5</TranslationZ>
        <RotationZ>0</RotationZ>
        <RotationY>0</RotationY>
        <RotationX>0</RotationX>
        <ScaleX>10</ScaleX>
        <ScaleY>10</ScaleY>
        <ScaleZ>1</ScaleZ>
        <Ambient>
          <X>0.2</X>
          <Y>0.2</Y>
          <Z>0.2</Z>
        </Ambient>
        <Diffuse>
          <X>0.8</X>
          <Y>0.8</Y>
          <Z>0.8</Z>
        </Diffuse>
        <Specular>
          <X>0.8</X>
          <Y>0.8</Y>
          <Z>0.8</Z>
        </Specular>
        <SpecularExponent>10</SpecularExponent>
        <MeshName>Plane</MeshName>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:BindTexture">
          <gl:TextureSlot>Texture0</gl:TextureSlot>
          <gl:ShaderName>TexturedModel</gl:ShaderName>
          <gl:TextureName>vertGrat</gl:TextureName>
          <gl:TextureTarget>Texture2D</gl:TextureTarget>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
        <TranslationX>-5</TranslationX>
        <TranslationY>0</TranslationY>
        <TranslationZ>0</TranslationZ>
        <RotationZ>0</RotationZ>
        <RotationY>90</RotationY>
        <RotationX>0</RotationX>
        <ScaleX>10</ScaleX>
        <ScaleY>10</ScaleY>
        <ScaleZ>1</ScaleZ>
        <Ambient>
          <X>0.2</X>
          <Y>0.2</Y>
          <Z>0.2</Z>
        </Ambient>
        <Diffuse>
          <X>0.8</X>
          <Y>0.8</Y>
          <Z>0.8</Z>
        </Diffuse>
        <Specular>
          <X>0.8</X>
          <Y>0.8</Y>
          <Z>0.8</Z>
        </Specular>
        <SpecularExponent>10</SpecularExponent>
        <MeshName>Plane</MeshName>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawModel.bonsai">
        <TranslationX>2</TranslationX>
        <TranslationY>2</TranslationY>
        <TranslationZ>2</TranslationZ>
        <RotationZ>0</RotationZ>
        <RotationY>0</RotationY>
        <RotationX>0</RotationX>
        <ScaleX>0.5</ScaleX>
        <ScaleY>0.5</ScaleY>
        <ScaleZ>0.5</ScaleZ>
        <Ambient>
          <X>1</X>
          <Y>0</Y>
          <Z>0</Z>
        </Ambient>
        <Diffuse>
          <X>0.8</X>
          <Y>0.8</Y>
          <Z>0.8</Z>
        </Diffuse>
        <Specular>
          <X>0.8</X>
          <Y>0.8</Y>
          <Z>0.8</Z>
        </Specular>
        <SpecularExponent>10</SpecularExponent>
        <MeshName>cylinder</MeshName>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="11" To="14" Label="Source1" />
      <Edge From="11" To="16" Label="Source1" />
      <Edge From="11" To="18" Label="Source1" />
      <Edge From="11" To="20" Label="Source1" />
      <Edge From="11" To="22" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>