WorkflowBuilder(Version=2.8.1)
SubscribeSubject ExperimentEvents
-> VisualizerMapping => #1
SubscribeSubject Camera1
-> MemberSelector(Selector=Value.Image)
-> VisualizerMapping => #4
SubscribeSubject Camera2
-> MemberSelector(Selector=Value.Image)
-> VisualizerMapping => #7
#1, #4, #7 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=3, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")

ExternalizedMapping(SessionSettingsPath)
-> GroupWorkflow Initialization
    ExternalizedMapping(Path(DisplayName=SessionSettingsPath, Category="Session Settings"))
    -> LoadSettings(Path=C:\Users\ONIX\source\ae-dev\vestibular-vr\src\blockTypesDemo.yml)
    -> Take(Count=1)
    -> AsyncSubject SessionSettings

    Bonsai.Shaders.CreateWindow
      Width=7680
      Height=1080
      VSync=On
      SwapSync=false
      ClearColor=Black
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Fullscreen
      DisplayDevice=Third
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageSequence
          Name=MotionCloud
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=C:\Users\ONIX\source\ae-dev\vestibular-vr\Python\vestibular-vr\test-cloud.mp4
          FlipMode=Vertical
          FrameCount=nil
          StartPosition=0
    -> Bonsai.Resources.LoadResources

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Take(Count=1)
    -> AsyncSubject RngSeed

    SubscribeSubject RngSeed
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
    -> BehaviorSubject ProbabilitySampling

    BehaviorSubject<System.String> ExperimentEvents

    StringProperty(Value="Session start")
    -> MulticastSubject ExperimentEvents

    DoubleProperty(Value=0)
    -> BehaviorSubject PosCounter

GroupWorkflow "Visual Mapping"
    Bonsai.Shaders.RenderFrame => #0
    SubscribeSubject Blocks => #1
    #0, #1 -> SubscribeWhen => #2
    -> Condition IsClosedLoop
        WorkflowInput Source1

        SubscribeSubject Blocks
        -> MemberSelector(Selector=Stimulus.Mode)
        -> Equal(Operand=WorkflowProperty<DataSchema.StimulusProtocolMode>(Value=ClosedLoop))
        -> WorkflowOutput
    -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-180, Right=180, Bottom=-90, Top=90)
    -> BehaviorSubject DrawCall
    -> IncludeWorkflow(Path=BonVision:Environment.SphereMapping.bonsai, ClearColor=Gray, Width=2048, Height=2048, RotationZ=0, RotationY=0, RotationX=0, FaceSize=nil) => #6
    -> GroupWorkflow FrontView
        WorkflowInput Source1 => #0
        ExternalizedMapping(Width, Height, Rotation, Translation) => #1
        #0, #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=30, Height=20, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-10))
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.25, Height=1)
        -> WorkflowOutput
    #6 -> GroupWorkflow RightView
        WorkflowInput Source1 => #0
        ExternalizedMapping(Width, Height, Rotation, Translation) => #1
        #0, #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=30, Height=20, Rotation(X=0, Y=-90.000002504478161, Z=0), Translation(X=10, Y=0, Z=0))
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.25, Y=0, Width=0.25, Height=1)
        -> WorkflowOutput
    #6 -> GroupWorkflow BackView
        WorkflowInput Source1 => #0
        ExternalizedMapping(Width, Height, Rotation, Translation) => #1
        #0, #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=30, Height=20, Rotation(X=0, Y=180.00000500895632, Z=0), Translation(X=0, Y=0, Z=10))
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.5, Y=0, Width=0.25, Height=1)
        -> WorkflowOutput
    #6 -> GroupWorkflow LeftView
        WorkflowInput Source1 => #0
        ExternalizedMapping(Width, Height, Rotation, Translation) => #1
        #0, #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=30, Height=20, Rotation(X=0, Y=90.000002504478161, Z=0), Translation(X=-10, Y=0, Z=0))
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.75, Y=0, Width=0.25, Height=1)
        -> WorkflowOutput
    #2 -> Condition IsOpenLoop
        WorkflowInput Source1

        SubscribeSubject Blocks
        -> MemberSelector(Selector=Stimulus.Mode)
        -> Equal(Operand=WorkflowProperty<DataSchema.StimulusProtocolMode>(Value=ClosedLoop))
        -> WorkflowOutput
    -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
    -> PublishSubject PerspectiveDrawCall1
    -> Bonsai.Shaders.RenderTexture
      RenderState=""
      ClearColor=Black
      ClearMask="DepthBufferBit ColorBufferBit"
      Width=1000
      Height=1
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
    -> IncludeWorkflow
      Path=BonVision:Environment.PerspectiveView.bonsai
      Eye(X=0, Y=0, Z=100)
      Target(X=1, Y=0, Z=-1)
      Up(X=0, Y=1, Z=0)
      FieldOfView=90
      NearClip=0.1
      FarClip=1000
      Light(X=0, Y=1, Z=1)
    -> BehaviorSubject PerspectiveDrawCall2 => #17
    -> GroupWorkflow FrontView
        WorkflowInput Source1 => #0
        ExternalizedMapping(Width, Height, Rotation, Translation) => #1
        #0, #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=30, Height=20, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-10))
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.25, Height=1)
        -> WorkflowOutput
    #17 -> GroupWorkflow RightView
        WorkflowInput Source1 => #0
        ExternalizedMapping(Width, Height, Rotation, Translation) => #1
        #0, #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=30, Height=20, Rotation(X=0, Y=-90.000002504478161, Z=0), Translation(X=10, Y=0, Z=0))
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.25, Y=0, Width=0.25, Height=1)
        -> WorkflowOutput
    #17 -> GroupWorkflow BackView
        WorkflowInput Source1 => #0
        ExternalizedMapping(Width, Height, Rotation, Translation) => #1
        #0, #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=30, Height=20, Rotation(X=0, Y=180.00000500895632, Z=0), Translation(X=0, Y=0, Z=10))
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.5, Y=0, Width=0.25, Height=1)
        -> WorkflowOutput
    #17 -> GroupWorkflow LeftView
        WorkflowInput Source1 => #0
        ExternalizedMapping(Width, Height, Rotation, Translation) => #1
        #0, #1 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=30, Height=20, Rotation(X=0, Y=90.000002504478161, Z=0), Translation(X=-10, Y=0, Z=0))
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.75, Y=0, Width=0.25, Height=1)
        -> WorkflowOutput

    SubscribeSubject SessionSettings => #22
    ExternalizedMapping(Filter(DisplayName=StartTrialLogicKey, Category=TrialControl))
    -> Bonsai.Windows.Input.KeyDown(Filter="Space Shift", SuppressRepetitions=false) => #24
    #22, #24 -> SubscribeWhen
    -> GroupWorkflow UnwrapTrialSequence
        WorkflowInput Source1
        -> MemberSelector(Selector=Blocks)
        -> Merge
        -> WorkflowOutput
    -> BehaviorSubject Blocks

ExternalizedMapping(StartTrialLogicKey)
-> GroupWorkflow "Trial Logic"
    SubscribeSubject SessionSettings => #0
    ExternalizedMapping(Filter(DisplayName=StartTrialLogicKey, Category=TrialControl))
    -> Bonsai.Windows.Input.KeyDown(Filter="Space Shift", SuppressRepetitions=false) => #2
    #0, #2 -> SubscribeWhen
    -> GroupWorkflow UnwrapTrialSequence
        WorkflowInput Source1
        -> MemberSelector(Selector=Blocks)
        -> Merge
        -> WorkflowOutput
    -> CreateObservable DoBlock
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject Block

        Bonsai.Numerics.CreateRandom(Seed=nil) => #3
        SubscribeSubject Block
        -> MemberSelector(Selector=HaltProtocol.RandomDelay)
        -> PropertyMapping(Upper) => #6
        #3, #6 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=0.5)
        -> AsyncSubject DelaySampling

        SubscribeSubject Block
        -> MemberSelector(Selector=Alias)
        -> Format(Format="{0} block started", Selector=it)
        -> MulticastSubject ExperimentEvents

        BooleanProperty(Value=false)
        -> BehaviorSubject BlockFinished

        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=Metadata.RunGain) => #16
        SubscribeSubject Block
        -> MemberSelector(Selector=BlockGainModifier) => #18
        #16, #18 -> Zip
        -> Multiply
        -> BehaviorSubject BlockGain

        SubscribeSubject DrawCall => #22
        -> Condition IsGratingStimulus
            WorkflowInput Source1

            SubscribeSubject Block
            -> MemberSelector(Selector=Stimulus.Type)
            -> Equal(Operand=WorkflowProperty<DataSchema.StimulusProtocolType>(Value=Grating))
            -> WorkflowOutput
        -> GroupWorkflow ClosedLoopGratings => #24
            WorkflowInput Source1 => #0
            SubscribeSubject Block
            -> MemberSelector(Selector=Stimulus.SpatialFrequency)
            -> PropertyMapping(SpatialFrequency) => #3
            SubscribeSubject LeftPhaseProcession
            -> PropertyMapping(Phase) => #5
            SubscribeSubject Block
            -> MemberSelector(Selector=Stimulus.Offset1)
            -> PropertyMapping(LocationX) => #8
            SubscribeSubject Block
            -> MemberSelector(Selector=Stimulus.Extent1)
            -> PropertyMapping(ExtentX) => #11
            #0, #3, #5, #8, #11 -> IncludeWorkflow => #12
              Path=BonVision:Primitives.DrawGratings.bonsai
              LocationX=-90
              LocationY=0
              Layer=0
              ExtentX=180
              ExtentY=60
              SpatialFrequency=0.5
              TemporalFrequency=0
              Phase=632.224548
              Angle=0
              SquareWave=false
              Contrast=2
              DutyCycle=nil
              Radius=1
              Aperture=20
              Opacity=1
            SubscribeSubject Block
            -> MemberSelector(Selector=Stimulus.SpatialFrequency)
            -> PropertyMapping(SpatialFrequency) => #15
            SubscribeSubject RightPhaseProcession
            -> PropertyMapping(Phase) => #17
            SubscribeSubject Block
            -> MemberSelector(Selector=Stimulus.Offset2)
            -> PropertyMapping(LocationX) => #20
            SubscribeSubject Block
            -> MemberSelector(Selector=Stimulus.Extent2)
            -> PropertyMapping(ExtentX) => #23
            #0, #15, #17, #20, #23 -> IncludeWorkflow => #24
              Path=BonVision:Primitives.DrawGratings.bonsai
              LocationX=90
              LocationY=0
              Layer=0
              ExtentX=180
              ExtentY=60
              SpatialFrequency=0.5
              TemporalFrequency=0
              Phase=9681.017
              Angle=0
              SquareWave=false
              Contrast=2
              DutyCycle=nil
              Radius=1
              Aperture=20
              Opacity=1
            #12, #24 -> Zip
            -> WorkflowOutput
        #22 -> Condition IsCloudStimulus
            WorkflowInput Source1

            SubscribeSubject Block
            -> MemberSelector(Selector=Stimulus.Type)
            -> Equal(Operand=WorkflowProperty<DataSchema.StimulusProtocolType>(Value=Cloud))
            -> WorkflowOutput
        -> GroupWorkflow MotionClouds => #26
            SubscribeSubject LeftPhaseProcession
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Convert.ToInt32(it)
            -> Bonsai.Scripting.Expressions.ExpressionTransform Wrap
              Expression: it >= 0 ? ((it) % (4096)) : (4096 - Math.Abs(it % 4096))
            -> PublishSubject MotionCloudIndexPositionLeft

            SubscribeSubject RightPhaseProcession
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Convert.ToInt32(it)
            -> Bonsai.Scripting.Expressions.ExpressionTransform Wrap
              Expression: it >= 0 ? ((it) % (4096)) : (4096 - Math.Abs(it % 4096))
            -> PublishSubject MotionCloudIndexPositionRight

            WorkflowInput Source1 => #8
            SubscribeSubject MotionCloudIndexPositionLeft
            -> PropertyMapping(Index) => #10
            #8, #10 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Image, TextureName=MotionCloud, TextureTarget=Texture2D, Index=11) => #11
            SubscribeSubject Block
            -> MemberSelector(Selector=Stimulus.Offset1)
            -> PropertyMapping(LocationX) => #14
            SubscribeSubject Block
            -> MemberSelector(Selector=Stimulus.Extent1)
            -> PropertyMapping(ExtentX) => #17
            #11, #14, #17 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawImage.bonsai
              TextureName=""
              ExtentX=180
              ExtentY=60
              LocationX=-90
              LocationY=0
              Layer=0
              Angle=0
              ScaleX=1
              ScaleY=1
              ShiftX=0
              ShiftY=0
            -> MemberSelector(Selector=X) => #19
            SubscribeSubject MotionCloudIndexPositionRight
            -> PropertyMapping(Index) => #21
            #8, #21 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Image, TextureName=MotionCloud, TextureTarget=Texture2D, Index=169) => #22
            SubscribeSubject Block
            -> MemberSelector(Selector=Stimulus.Offset2)
            -> PropertyMapping(LocationX) => #25
            SubscribeSubject Block
            -> MemberSelector(Selector=Stimulus.Extent2)
            -> PropertyMapping(ExtentX) => #28
            #22, #25, #28 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawImage.bonsai
              TextureName=""
              ExtentX=180
              ExtentY=60
              LocationX=90
              LocationY=0
              Layer=0
              Angle=0
              ScaleX=1
              ScaleY=1
              ShiftX=0
              ShiftY=0
            -> MemberSelector(Selector=X) => #30
            #19, #30 -> Zip
            -> WorkflowOutput
        #24, #26 -> Merge => #27
        SubscribeSubject BlockFinished
        -> Condition => #29
            WorkflowInput Source1
            -> WorkflowOutput
        #27, #29 -> TakeUntil
        -> WorkflowOutput
        #22 -> Condition IsCorridorStimulus
            WorkflowInput Source1

            SubscribeSubject Block
            -> MemberSelector(Selector=Stimulus.Type)
            -> Equal(Operand=WorkflowProperty<DataSchema.StimulusProtocolType>(Value=Corridor))
            -> WorkflowOutput
        -> GroupWorkflow OpenLoopInfiniteCorridor
            Disable SubscribeSubject LeftPhaseProcession
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Convert.ToInt32(it)
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform Wrap
              Expression: it >= 0 ? ((it) % (4096)) : (4096 - Math.Abs(it % 4096))
            -> Disable PublishSubject MotionCloudIndexPositionLeft

            Disable SubscribeSubject RightPhaseProcession
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Convert.ToInt32(it)
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform Wrap
              Expression: it >= 0 ? ((it) % (4096)) : (4096 - Math.Abs(it % 4096))
            -> Disable PublishSubject MotionCloudIndexPositionRight

            Disable WorkflowInput Source1 => #8
            Disable SubscribeSubject MotionCloudIndexPositionLeft
            -> Disable PropertyMapping(Index) => #10
            #8, #10 -> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Image, TextureName=MotionCloud, TextureTarget=Texture2D, Index=11) => #11
            Disable SubscribeSubject Block
            -> Disable MemberSelector(Selector=Stimulus.Offset1)
            -> Disable PropertyMapping(LocationX) => #14
            Disable SubscribeSubject Block
            -> Disable MemberSelector(Selector=Stimulus.Extent1)
            -> Disable PropertyMapping(ExtentX) => #17
            #11, #14, #17 -> Disable IncludeWorkflow
              Path=BonVision:Primitives.DrawImage.bonsai
              TextureName=""
              ExtentX=180
              ExtentY=60
              LocationX=-90
              LocationY=0
              Layer=0
              Angle=0
              ScaleX=1
              ScaleY=1
              ShiftX=0
              ShiftY=0
            -> Disable MemberSelector(Selector=X) => #19
            Disable SubscribeSubject MotionCloudIndexPositionRight
            -> Disable PropertyMapping(Index) => #21
            #8, #21 -> Disable Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Image, TextureName=MotionCloud, TextureTarget=Texture2D, Index=169) => #22
            Disable SubscribeSubject Block
            -> Disable MemberSelector(Selector=Stimulus.Offset2)
            -> Disable PropertyMapping(LocationX) => #25
            Disable SubscribeSubject Block
            -> Disable MemberSelector(Selector=Stimulus.Extent2)
            -> Disable PropertyMapping(ExtentX) => #28
            #22, #25, #28 -> Disable IncludeWorkflow
              Path=BonVision:Primitives.DrawImage.bonsai
              TextureName=""
              ExtentX=180
              ExtentY=60
              LocationX=90
              LocationY=0
              Layer=0
              Angle=0
              ScaleX=1
              ScaleY=1
              ShiftX=0
              ShiftY=0
            -> Disable MemberSelector(Selector=X) => #30
            #19, #30 -> Disable Zip
            -> Disable WorkflowOutput

            WorkflowInput Source1
            -> WorkflowOutput

            SubscribeSubject PerspectiveDrawCall1 => #35
            Bonsai.Dsp.FunctionGenerator(BufferLength=1, Frequency=0, Waveform=Square, SampleRate=100, Depth=U16, Amplitude=0.001, Offset=1, Phase=0)
            -> Index(Operand=IntProperty(Value=0))
            -> MemberSelector(Selector=Val0)
            -> Accumulate
            -> PropertyMapping(Phase) => #40
            #35, #40 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawGratings.bonsai
              LocationX=0
              LocationY=0
              Layer=0
              ExtentX=1
              ExtentY=1
              SpatialFrequency=1000
              TemporalFrequency=0
              Phase=-428.28653
              Angle=0
              SquareWave=false
              Contrast=10
              DutyCycle=nil
              Radius=1
              Aperture=0
              Opacity=1
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Black
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=1000
              Height=1
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Image, TextureTarget=Texture2D)
            -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
            -> IncludeWorkflow
              Path=BonVision:Primitives.DrawImage.bonsai
              TextureName=""
              ExtentX=20
              ExtentY=20
              LocationX=0
              LocationY=0
              Layer=0
              Angle=0
              ScaleX=1
              ScaleY=1
              ShiftX=0
              ShiftY=0

            SubscribeSubject PerspectiveDrawCall2 => #46
            -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-0.5
              TranslationY=0
              TranslationZ=100
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=100
              ScaleY=1
              ScaleZ=1
              Ambient(X=0.2, Y=0.2, Z=0.2)
              Diffuse(X=0.8, Y=0.8, Z=0.8)
              Specular(X=0.8, Y=0.8, Z=0.8)
              SpecularExponent=10
              MeshName=Plane
            #46 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0.5
              TranslationY=0
              TranslationZ=100
              RotationZ=0
              RotationY=90
              RotationX=0
              ScaleX=100
              ScaleY=1
              ScaleZ=1
              Ambient(X=0.2, Y=0.2, Z=0.2)
              Diffuse(X=0.8, Y=0.8, Z=0.8)
              Specular(X=0.8, Y=0.8, Z=0.8)
              SpecularExponent=10
              MeshName=Plane
            #46 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-0.5
              TranslationZ=100
              RotationZ=0
              RotationY=90
              RotationX=-90
              ScaleX=100
              ScaleY=1
              ScaleZ=1
              Ambient(X=0.2, Y=0.2, Z=0.2)
              Diffuse(X=0.8, Y=0.8, Z=0.8)
              Specular(X=0.8, Y=0.8, Z=0.8)
              SpecularExponent=10
              MeshName=Plane
            #46 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=0.5
              TranslationZ=100
              RotationZ=0
              RotationY=90
              RotationX=90
              ScaleX=100
              ScaleY=1
              ScaleZ=1
              Ambient(X=0.2, Y=0.2, Z=0.2)
              Diffuse(X=0.8, Y=0.8, Z=0.8)
              Specular(X=0.8, Y=0.8, Z=0.8)
              SpecularExponent=10
              MeshName=Plane

        SubscribeSubject MotorProcession
        -> Sink ApplyMotorMotion
            WorkflowInput Source1
            -> ToPulseInterval(ZeroThreshold=1E-06, MaxValue=0.02, MinValue=2.5E-05) => #1
            -> PropertyMapping(ImmediatePulses) => #2
            #1, #2 -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateImmediatePulsesPayload(ImmediatePulses=0))
            -> MulticastSubject H2Commands
            -> WorkflowOutput

        SubscribeSubject BlockGain
        -> PropertyMapping(Gain)
        -> GroupWorkflow CalculatePhaseProcession
            Annotation DeltaSwitch(Text="Used to globally control movement delta gain, e.g. set to 0 to halt update of visual stimuli, or to 1 to enable update.")
            -> BehaviorSubject<System.Single> MovementDeltaSwitch

            SubscribeSubject PhaseDelta => #2
            ExternalizedMapping(Value(DisplayName=Gain))
            -> FloatProperty(Value=0.0008) => #4
            #2, #4 -> WithLatestFrom
            -> Multiply => #6
            SubscribeSubject MovementDeltaSwitch => #7
            #6, #7 -> WithLatestFrom
            -> Multiply
            -> Accumulate => #10
            -> Add(Operand=FloatProperty(Value=0))
            -> Multiply(Operand=FloatProperty(Value=-1))
            -> PublishSubject LeftPhaseProcession
            #10 -> Add(Operand=FloatProperty(Value=180))
            -> Multiply(Operand=FloatProperty(Value=1))
            -> PublishSubject RightPhaseProcession

            SubscribeSubject MovementDelta
            -> MemberSelector(Selector=X) => #18
            SubscribeSubject Block
            -> MemberSelector(Selector=FlowXToVisualGain) => #20
            #18, #20 -> WithLatestFrom
            -> Multiply => #22
            SubscribeSubject MovementDelta
            -> MemberSelector(Selector=Y) => #24
            SubscribeSubject Block
            -> MemberSelector(Selector=FlowYToVisualGain) => #26
            #24, #26 -> WithLatestFrom
            -> Multiply => #28
            SubscribeSubject AnalogInput => #29
            SubscribeSubject Block
            -> MemberSelector(Selector=PlaybackToVisualGain) => #31
            #29, #31 -> WithLatestFrom
            -> Multiply => #33
            SubscribeSubject RotaryEncoder => #34
            SubscribeSubject Block
            -> MemberSelector(Selector=RotaryToVisualGain) => #36
            #34, #36 -> WithLatestFrom
            -> Multiply => #38
            #22, #28, #33, #38 -> Merge
            -> PublishSubject PhaseDelta

        SubscribeSubject BlockGain
        -> PropertyMapping(MotorGain)
        -> GroupWorkflow CalculateMotorProcession
            BehaviorSubject<System.Single> MotorDeltaSwitch

            SubscribeSubject MotorDelta => #1
            ExternalizedMapping(Value(DisplayName=MotorGain))
            -> FloatProperty(Value=0.0008) => #3
            #1, #3 -> WithLatestFrom
            -> Multiply => #5
            SubscribeSubject MotorDeltaSwitch => #6
            #5, #6 -> WithLatestFrom
            -> Multiply
            -> PublishSubject MotorProcession

            SubscribeSubject MovementDelta
            -> MemberSelector(Selector=Y) => #11
            SubscribeSubject Block
            -> MemberSelector(Selector=FlowYToMotorGain) => #13
            #11, #13 -> WithLatestFrom
            -> Multiply => #15
            SubscribeSubject AnalogInput => #16
            SubscribeSubject Block
            -> MemberSelector(Selector=PlaybackToMotorGain) => #18
            #16, #18 -> WithLatestFrom
            -> Multiply => #20
            SubscribeSubject MovementDelta
            -> MemberSelector(Selector=X) => #22
            SubscribeSubject Block
            -> MemberSelector(Selector=FlowXToMotorGain) => #24
            #22, #24 -> WithLatestFrom
            -> Multiply => #26
            #15, #20, #26 -> CombineLatest
            -> Add
            -> PublishSubject MotorDelta

        SubscribeSubject Block
        -> MemberSelector(Selector=TotalRuntime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Bonsai.Shaders.Timer(DueTime=PT30S)
        -> StringProperty(Value="Block timer elapsed")
        -> MulticastSubject ExperimentEvents
        -> BooleanProperty(Value=true)
        -> MulticastSubject BlockFinished

        SubscribeSubject Block
        -> SelectMany HomePlatform => #52
            WorkflowInput Source1
            -> Unit
            -> MulticastSubject HomePlatform
            -> StringProperty(Value="Homing platform")
            -> MulticastSubject ExperimentEvents

            SubscribeSubject PlatformHomed => #5
            Timer(DueTime=PT0.5S, Period=PT0S) => #6
            #5, #6 -> SubscribeWhen
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        SubscribeSubject Block
        -> Sink StartClosedLoop
            WorkflowInput Source1
            -> FloatProperty(Value=1)
            -> MulticastSubject MotorDeltaSwitch
            -> MulticastSubject MovementDeltaSwitch
            -> WorkflowOutput
        -> SelectMany TrialLoop
            SubscribeSubject MovementDelta => #0
            -> MemberSelector(Selector=X) => #1
            #0 -> MemberSelector(Selector=Y) => #2
            #1, #2 -> Merge => #3
            SubscribeSubject BlockGain => #4
            #3, #4 -> WithLatestFrom
            -> Multiply
            -> Bonsai.Dsp.Abs => #7
            SubscribeSubject Block
            -> MemberSelector(Selector=DecayTimestep)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(Period)
            -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.1S) => #12
            SubscribeSubject Block
            -> MemberSelector(Selector=RunThresholdDecay)
            -> PropertyMapping(Value) => #15
            #12, #15 -> DoubleProperty(Value=-1) => #16
            #7, #16 -> Merge => #17
            DoubleProperty(Value=0) => #18
            #17, #18 -> Scan
                WorkflowInput Source1
                -> MemberSelector(Selector="Accumulation,Value")
                -> Add
                -> Bonsai.Dsp.Rescale(Min=0, Max=1000000, RangeMin=0, RangeMax=1000000, RescaleType=Clamp)
                -> WorkflowOutput
            -> PublishSubject ThresholdDistance

            WorkflowInput Source1
            -> SelectMany WaitForThreshold
                WorkflowInput Source1

                SubscribeSubject ThresholdDistance => #1
                SubscribeSubject Block
                -> MemberSelector(Selector=RunThreshold)
                -> PropertyMapping(Value) => #4
                #1, #4 -> GreaterThan(Operand=DoubleProperty(Value=100))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1)
                -> WorkflowOutput

                StringProperty(Value="Wait for run threshold...")
                -> MulticastSubject ExperimentEvents
            -> SelectMany DecideHalt => #23
                WorkflowInput Source1

                SubscribeSubject ProbabilitySampling
                -> Bonsai.Numerics.Distributions.Sample => #2
                SubscribeSubject Block
                -> MemberSelector(Selector=HaltProbability)
                -> PropertyMapping(Value) => #5
                #2, #5 -> LessThan(Operand=DoubleProperty(Value=0.8))
                -> WorkflowOutput

                StringProperty(Value="Check halt probability")
                -> MulticastSubject ExperimentEvents
            -> Condition IsHalt
                WorkflowInput Source1
                -> WorkflowOutput
            -> SelectMany HaltDelay => #25
                WorkflowInput Source1

                SubscribeSubject Block
                -> MemberSelector(Selector=HaltProtocol.MinumumDelay) => #2
                SubscribeSubject DelaySampling
                -> Bonsai.Numerics.Distributions.Sample => #4
                #2, #4 -> Zip
                -> Add
                -> AsyncSubject HaltTime

                SubscribeSubject HaltTime
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime)
                -> Bonsai.Shaders.Timer(DueTime=PT1.2S)
                -> Take(Count=1)
                -> WorkflowOutput

                StringProperty(Value="Halt delay") => #14
                SubscribeSubject HaltTime => #15
                #14, #15 -> Zip
                -> Format(Format="{0}: {1}s", Selector="Item1,Item2")
                -> MulticastSubject ExperimentEvents
            -> Condition StillRunning
                WorkflowInput Source1

                SubscribeSubject ThresholdDistance => #1
                SubscribeSubject Block
                -> MemberSelector(Selector=RunThreshold)
                -> PropertyMapping(Value) => #4
                #1, #4 -> GreaterThan(Operand=DoubleProperty(Value=100))
                -> WorkflowOutput
            -> SelectMany ApplyHalt => #27
                WorkflowInput Source1
                -> FloatProperty(Value=0)
                -> MulticastSubject MovementDeltaSwitch

                SubscribeSubject Block
                -> MemberSelector(Selector=HaltProtocol.HaltTime)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime)
                -> Bonsai.Shaders.Timer(DueTime=PT2S) => #7
                SubscribeSubject Block
                -> MemberSelector(Selector=HaltProtocol.HaltGain)
                -> PropertyMapping(Value) => #10
                #7, #10 -> FloatProperty(Value=0)
                -> MulticastSubject MovementDeltaSwitch
                -> Take(Count=1)
                -> WorkflowOutput

                StringProperty(Value="Apply halt") => #15
                SubscribeSubject Block
                -> MemberSelector(Selector=HaltProtocol.HaltTime) => #17
                #15, #17 -> Zip
                -> Format(Format="{0}: {1}s", Selector="Item1,Item2")
                -> MulticastSubject ExperimentEvents
            #25 -> Condition NotRunning
                WorkflowInput Source1

                SubscribeSubject ThresholdDistance => #1
                SubscribeSubject Block
                -> MemberSelector(Selector=RunThreshold)
                -> PropertyMapping(Value) => #4
                #1, #4 -> LessThanOrEqual(Operand=DoubleProperty(Value=100))
                -> WorkflowOutput
            -> SelectMany NotRunning => #29
                WorkflowInput Source1

                FloatProperty(Value=0)
                -> Take(Count=1)
                -> WorkflowOutput

                StringProperty(Value="Not running, skipping halt")
                -> MulticastSubject ExperimentEvents
            #23 -> Condition NotHalt
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> SelectMany PerformNotHalt => #31
                WorkflowInput Source1

                FloatProperty(Value=0)
                -> Take(Count=1)
                -> WorkflowOutput

                StringProperty(Value="No halt")
                -> MulticastSubject ExperimentEvents
            #27, #29, #31 -> Merge
            -> Take(Count=1)
            -> BooleanProperty(Value=true)
            -> WorkflowOutput
        -> Repeat => #56
        #52, #56 -> Concat
    -> Concat
    -> WorkflowOutput

GroupWorkflow H1Hardware
    BehaviorSubject<Bonsai.Harp.HarpMessage> H1Commands
    -> Harp.VestibularH1.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM10)
    -> PublishSubject H1Events
    -> WorkflowOutput

    SubscribeSubject H1Events
    -> Harp.VestibularH1.FilterRegister(FilterType=Include, Register=Harp.VestibularH1.OpticalTrackingRead)
    -> Harp.VestibularH1.Parse(Register=Harp.VestibularH1.TimestampedOpticalTrackingRead)
    -> MemberSelector(Selector=Value) => #7
    -> Index(Operand=IntProperty(Value=0)) => #8
    #7 -> Index(Operand=IntProperty(Value=1)) => #9
    #7 -> Index(Operand=IntProperty(Value=2)) => #10
    #8, #9, #10 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform FlowSensor
      Expression:
        new (
          it.Item1 as X,
          it.Item2 as Y,
          it.Item3 as Brightness
        )
    -> PublishSubject FlowSensor1
    #7 -> Index(Operand=IntProperty(Value=3)) => #14
    #7 -> Index(Operand=IntProperty(Value=4)) => #15
    #7 -> Index(Operand=IntProperty(Value=5)) => #16
    #14, #15, #16 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform FlowSensor
      Expression:
        new (
          it.Item1 as X,
          it.Item2 as Y,
          it.Item3 as Brightness
        )
    -> PublishSubject FlowSensor2

ExternalizedMapping(HomePlatform, StepCCW, StepCW)
-> GroupWorkflow H2Hardware
    BehaviorSubject<Bonsai.Harp.HarpMessage> H2Commands
    -> Harp.VestibularH2.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM11)
    -> PublishSubject H2Events
    -> WorkflowOutput

    SubscribeSubject H2Events
    -> Harp.VestibularH2.FilterRegister(FilterType=Include, Register=Harp.VestibularH2.Encoder)
    -> Harp.VestibularH2.Parse(Register=Harp.VestibularH2.TimestampedEncoder)
    -> MemberSelector(Selector=Value)
    -> PublishSubject RotaryEncoder

    SubscribeSubject H2Events
    -> Harp.VestibularH2.FilterRegister(FilterType=Include, Register=Harp.VestibularH2.AnalogInput)
    -> Harp.VestibularH2.Parse(Register=Harp.VestibularH2.TimestampedAnalogInput)
    -> MemberSelector(Selector=Value)
    -> PublishSubject AnalogInput

    SubscribeSubject H2Events
    -> Bonsai.Harp.FilterRegister(FilterType=Include, Register=Bonsai.Harp.FilterRegisterAddress(Address=39))
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=TimestampedS16, IsArray=false))
    -> MemberSelector(Selector=Value)
    -> PublishSubject HallSensor

    BooleanProperty(Value=false)
    -> MulticastSubject PlatformHomed

    BehaviorSubject<System.Boolean> PlatformHomed

    BehaviorSubject<System.Reactive.Unit> HomePlatform
    -> CreateObservable HomePlatform
        SubscribeSubject HallSensor
        -> LessThan(Operand=WorkflowProperty<System.Int16>(Value=200))
        -> Condition Home
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateImmediatePulsesPayload(ImmediatePulses=0))
        -> MulticastSubject H2Commands
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> MulticastSubject PlatformHomed
        -> WorkflowOutput

        WorkflowInput Source1
        -> BooleanProperty(Value=false)
        -> MulticastSubject PlatformHomed
        -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateImmediatePulsesPayload(ImmediatePulses=200))
        -> MulticastSubject H2Commands
    -> Switch

    BehaviorSubject<System.Int32> StepPlatform
    -> SelectMany StepPlatform
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject StepPulseInterval

        SubscribeSubject StepPulseInterval
        -> PropertyMapping(ImmediatePulses)
        -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateImmediatePulsesPayload(ImmediatePulses=500))
        -> MulticastSubject H2Commands
        -> Delay(DueTime=PT0.2S)
        -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateImmediatePulsesPayload(ImmediatePulses=0))
        -> MulticastSubject H2Commands
        -> Take(Count=1)
        -> WorkflowOutput

    ExternalizedMapping(Filter(DisplayName=HomePlatform, Category=PlatformControl))
    -> Bonsai.Windows.Input.KeyDown(Filter="Back H Shift", SuppressRepetitions=false)
    -> Unit
    -> MulticastSubject HomePlatform

    ExternalizedMapping(Filter(DisplayName=StepCCW, Category=PlatformControl))
    -> Bonsai.Windows.Input.KeyDown(Filter="LButton MButton XButton1 Space Prior PageUp Home Left Shift", SuppressRepetitions=false)
    -> IntProperty(Value=500)
    -> MulticastSubject StepPlatform

    ExternalizedMapping(Filter(DisplayName=StepCW, Category=PlatformControl))
    -> Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel MButton XButton1 XButton2 Space Prior PageUp Next PageDown End Home Left Up Right Shift", SuppressRepetitions=false)
    -> IntProperty(Value=-500)
    -> MulticastSubject StepPlatform

    SubscribeSubject SessionSettings => #39
    -> Delay(DueTime=PT0.5S) => #40
    -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateControlPayload(Control=DisableMotor)) => #41
    #40 -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateControlPayload(Control=DisableAnalogInput)) => #42
    #40 -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateControlPayload(Control=DisableEncoder)) => #43
    #40 -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateControlPayload(Control=ResetEncoder)) => #44
    #39 -> Delay(DueTime=PT1S) => #45
    -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateControlPayload(Control=EnableMotor)) => #46
    #45 -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateControlPayload(Control=EnableAnalogInput)) => #47
    #45 -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateControlPayload(Control=EnableEncoder)) => #48
    #39 -> MemberSelector(Selector=MotorSettings.NominalPulseInterval)
    -> PropertyMapping(NominalPulseInterval) => #50
    #50, #45 -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateNominalPulseIntervalPayload(NominalPulseInterval=200)) => #51
    #39 -> MemberSelector(Selector=MotorSettings.InitialPulseInterval)
    -> PropertyMapping(InitialPulseInterval) => #53
    #53, #45 -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreateInitialPulseIntervalPayload(InitialPulseInterval=200)) => #54
    #39 -> MemberSelector(Selector=MotorSettings.PulseStepInterval)
    -> PropertyMapping(PulseStepInterval) => #56
    #56, #45 -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreatePulseStepIntervalPayload(PulseStepInterval=2)) => #57
    #39 -> MemberSelector(Selector=MotorSettings.PulsePeriod)
    -> PropertyMapping(PulsePeriod) => #59
    #59, #45 -> Harp.VestibularH2.CreateMessage(MessageType=Write, Payload=Harp.VestibularH2.CreatePulsePeriodPayload(PulsePeriod=10)) => #60
    #41, #42, #43, #44, #46, #47, #48, #51, #54, #57, #60 -> Merge
    -> MulticastSubject H2Commands

ExternalizedMapping(StartCamerasKey, StopCamerasKey)
-> GroupWorkflow CameraControl
    SubscribeSubject SessionSettings => #0
    -> Delay(DueTime=PT0.5S)
    -> Harp.VestibularH1.CreateMessage(MessageType=Write, Payload=Harp.VestibularH1.CreateStartAndStopPayload(StartAndStop=StopCam0)) => #2
    #0 -> Delay(DueTime=PT0.5S)
    -> Harp.VestibularH1.CreateMessage(MessageType=Write, Payload=Harp.VestibularH1.CreateStartAndStopPayload(StartAndStop=StopCam1)) => #4
    #0 -> Delay(DueTime=PT1S)
    -> Harp.VestibularH1.CreateMessage(MessageType=Write, Payload=Harp.VestibularH1.CreateCam0TriggerFrequencyPayload(Cam0TriggerFrequency=100)) => #6
    #0 -> Delay(DueTime=PT1S)
    -> Harp.VestibularH1.CreateMessage(MessageType=Write, Payload=Harp.VestibularH1.CreateCam0TriggerDurationPayload(Cam0TriggerDuration=500)) => #8
    #0 -> Delay(DueTime=PT1S)
    -> Harp.VestibularH1.CreateMessage(MessageType=Write, Payload=Harp.VestibularH1.CreateCam1TriggerFrequencyPayload(Cam1TriggerFrequency=100)) => #10
    #0 -> Delay(DueTime=PT1S)
    -> Harp.VestibularH1.CreateMessage(MessageType=Write, Payload=Harp.VestibularH1.CreateCam1TriggerDurationPayload(Cam1TriggerDuration=500)) => #12
    #2, #4, #6, #8, #10, #12 -> Merge
    -> MulticastSubject H1Commands

    ExternalizedMapping(Filter(DisplayName=StartCamerasKey, Category=CameraControl))
    -> Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel A B C Shift", SuppressRepetitions=false) => #16
    -> Harp.VestibularH1.CreateMessage(MessageType=Write, Payload=Harp.VestibularH1.CreateStartAndStopPayload(StartAndStop=StartCam0)) => #17
    #16 -> Harp.VestibularH1.CreateMessage(MessageType=Write, Payload=Harp.VestibularH1.CreateStartAndStopPayload(StartAndStop=StartCam1)) => #18
    #17, #18 -> Merge
    -> MulticastSubject H1Commands

    ExternalizedMapping(Filter(DisplayName=StopCamerasKey, Category=CameraControl))
    -> Bonsai.Windows.Input.KeyDown(Filter="MButton D Shift", SuppressRepetitions=false) => #22
    -> Harp.VestibularH1.CreateMessage(MessageType=Write, Payload=Harp.VestibularH1.CreateStartAndStopPayload(StartAndStop=StopCam0)) => #23
    #22 -> Harp.VestibularH1.CreateMessage(MessageType=Write, Payload=Harp.VestibularH1.CreateStartAndStopPayload(StartAndStop=StopCam1)) => #24
    #23, #24 -> Merge
    -> MulticastSubject H1Commands

    SubscribeSubject H1Events
    -> Harp.VestibularH1.Parse(Register=Harp.VestibularH1.TimestampedCam0Event) => #28
    ExternalizedMapping(SerialNumber(DisplayName=Camera1SerialNumber, Category=CameraControl)) => #29
    #28, #29 -> Aeon.Acquisition.SpinnakerCapture(Index=nil, SerialNumber=21205223, ColorProcessing=Default)
    -> PublishSubject Camera1

    SubscribeSubject H1Events
    -> Harp.VestibularH1.Parse(Register=Harp.VestibularH1.TimestampedCam1Event) => #33
    ExternalizedMapping(SerialNumber(DisplayName=Camera2SerialNumber, Category=CameraControl)) => #34
    #33, #34 -> Aeon.Acquisition.SpinnakerCapture(Index=nil, SerialNumber=22085343, ColorProcessing=Default)
    -> PublishSubject Camera2

ExternalizedMapping(StartLoggingKey)
-> GroupWorkflow Logging
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=Metadata.RootPath)
    -> PropertyMapping(Path)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogController.bonsai, Path=D:/TrialLogicTestData/, ChunkSize=1)

    SubscribeSubject H1Events => #4
    SubscribeSubject StartLoggingKey => #5
    #4, #5 -> SubscribeWhen
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=HarpDataH1, Heartbeats=H1Events, ClosingDuration=nil)

    SubscribeSubject H2Events => #8
    SubscribeSubject StartLoggingKey => #9
    #8, #9 -> SubscribeWhen
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=HarpDataH2, Heartbeats=H2Events, ClosingDuration=nil)

    SubscribeSubject Camera1 => #12
    SubscribeSubject StartLoggingKey => #13
    #12, #13 -> SubscribeWhen
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats=H1Events, ClosingDuration=nil, LogName=VideoData1, FrameRate=50)

    SubscribeSubject Camera2 => #16
    SubscribeSubject StartLoggingKey => #17
    #16, #17 -> SubscribeWhen
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats=H1Events, ClosingDuration=nil, LogName=VideoData2, FrameRate=50)

    SubscribeSubject SessionSettings => #20
    SubscribeSubject H1Events => #21
    #20, #21 -> SubscribeWhen => #22
    SubscribeSubject StartLoggingKey => #23
    #22, #23 -> SubscribeWhen
    -> IncludeWorkflow H1Events(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogJson.bonsai, Heartbeats="", ClosingDuration=nil, LogName=SessionSettings)
    -> Take(Count=1)

    ExternalizedMapping(Filter(DisplayName=StartLoggingKey, Category=LoggingControl))
    -> Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu B P R Shift", SuppressRepetitions=false)
    -> PublishSubject StartLoggingKey
    -> StringProperty(Value="Logging started")
    -> MulticastSubject ExperimentEvents

SubscribeSubject FlowSensor1 => #21
-> MemberSelector(Selector=X) => #22
#21 -> MemberSelector(Selector=Y) => #23
#22, #23 -> Zip
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression:
    new (
      it.Item1 as X,
      it.Item2 as Y
    )
-> PublishSubject MovementDelta

Disable Bonsai.Windows.Input.MouseWheel
-> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #28
  Expression: Convert.ToInt16(it)
-> Disable Multiply(Operand=WorkflowProperty<System.Int16>(Value=50)) => #29
#28 -> Disable Multiply(Operand=WorkflowProperty<System.Int16>(Value=50)) => #30
#29, #30 -> Disable Zip
-> Disable Bonsai.Scripting.Expressions.ExpressionTransform
  Expression:
    new (
      it.Item1 as X,
      it.Item2 as Y
    )
