<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.ONIX;assembly=Bonsai.ONIX"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ONIContext">
          <p1:ContextConfiguration>
            <p1:Slot>
              <p1:Driver>riffa</p1:Driver>
              <p1:Index>0</p1:Index>
            </p1:Slot>
            <p1:ReadSize>2584</p1:ReadSize>
            <p1:WriteSize>2048</p1:WriteSize>
          </p1:ContextConfiguration>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Maximized</gl:WindowState>
          <gl:DisplayDevice>Third</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:TextureResources">
          <gl:Textures />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
        <LocationX>0</LocationX>
        <LocationY>0</LocationY>
        <Layer>0</Layer>
        <ExtentX>100</ExtentX>
        <ExtentY>100</ExtentY>
        <SpatialFrequency>2</SpatialFrequency>
        <TemporalFrequency>0</TemporalFrequency>
        <Phase>0</Phase>
        <Angle>0</Angle>
        <SquareWave>true</SquareWave>
        <Contrast>1</Contrast>
        <DutyCycle>0.5</DutyCycle>
        <Radius>1</Radius>
        <Aperture>0</Aperture>
        <Opacity>1</Opacity>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Timer">
            <rx:DueTime>PT0S</rx:DueTime>
            <rx:Period>PT0.1S</rx:Period>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="IntProperty">
            <Value>0</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Timer">
            <rx:DueTime>PT0S</rx:DueTime>
            <rx:Period>PT0S</rx:Period>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Filter" DisplayName="start moving" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton A Control</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:FunctionGenerator">
            <dsp:BufferLength>1</dsp:BufferLength>
            <dsp:Frequency>0</dsp:Frequency>
            <dsp:Waveform>Square</dsp:Waveform>
            <dsp:SampleRate>100</dsp:SampleRate>
            <dsp:Depth>U16</dsp:Depth>
            <dsp:Amplitude>1</dsp:Amplitude>
            <dsp:Offset>1</dsp:Offset>
            <dsp:Phase>0</dsp:Phase>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Index">
          <Operand xsi:type="IntProperty">
            <Value>0</Value>
          </Operand>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Val0</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="scr:ExpressionTransform">
          <scr:Expression>Convert.ToByte(it)</scr:Expression>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:WithLatestFrom" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Item2</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="p1:DigitalIODevice">
            <p1:DeviceAddress>
              <p1:HardwareSlot>
                <p1:Driver>riffa</p1:Driver>
                <p1:Index>0</p1:Index>
              </p1:HardwareSlot>
              <p1:Address>7</p1:Address>
            </p1:DeviceAddress>
            <p1:LEDBrightness>40</p1:LEDBrightness>
            <p1:EnableStream>true</p1:EnableStream>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="grating stop" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>LButton RButton Cancel A B C Control</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:SubscribeWhen" />
              </Builder>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <ExtentX>100</ExtentX>
              <ExtentY>100</ExtentY>
              <SpatialFrequency>2</SpatialFrequency>
              <TemporalFrequency>2</TemporalFrequency>
              <Phase>0</Phase>
              <Angle>0</Angle>
              <SquareWave>true</SquareWave>
              <Contrast>1</Contrast>
              <DutyCycle>0.5</DutyCycle>
              <Radius>1</Radius>
              <Aperture>0</Aperture>
              <Opacity>1</Opacity>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:FunctionGenerator">
                <dsp:BufferLength>100</dsp:BufferLength>
                <dsp:Frequency>0</dsp:Frequency>
                <dsp:Waveform>Square</dsp:Waveform>
                <dsp:SampleRate>1</dsp:SampleRate>
                <dsp:Depth>U16</dsp:Depth>
                <dsp:Amplitude>0</dsp:Amplitude>
                <dsp:Offset>0</dsp:Offset>
                <dsp:Phase>0</dsp:Phase>
              </Combinator>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val0</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToByte(0)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:DigitalIODevice">
                <p1:DeviceAddress>
                  <p1:HardwareSlot>
                    <p1:Driver>riffa</p1:Driver>
                    <p1:Index>0</p1:Index>
                  </p1:HardwareSlot>
                  <p1:Address>7</p1:Address>
                </p1:DeviceAddress>
                <p1:LEDBrightness>40</p1:LEDBrightness>
                <p1:EnableStream>true</p1:EnableStream>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="3" To="10" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="15" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT0.1S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:FunctionGenerator">
          <dsp:BufferLength>1</dsp:BufferLength>
          <dsp:Frequency>0</dsp:Frequency>
          <dsp:Waveform>Square</dsp:Waveform>
          <dsp:SampleRate>100</dsp:SampleRate>
          <dsp:Depth>U16</dsp:Depth>
          <dsp:Amplitude>1</dsp:Amplitude>
          <dsp:Offset>1</dsp:Offset>
          <dsp:Phase>0</dsp:Phase>
        </Combinator>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Convert.ToByte(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:DigitalIODevice">
          <p1:DeviceAddress>
            <p1:HardwareSlot>
              <p1:Driver>riffa</p1:Driver>
              <p1:Index>0</p1:Index>
            </p1:HardwareSlot>
            <p1:Address>7</p1:Address>
          </p1:DeviceAddress>
          <p1:LEDBrightness>40</p1:LEDBrightness>
          <p1:EnableStream>true</p1:EnableStream>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="17" Label="Source1" />
      <Edge From="10" To="13" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="12" To="20" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source2" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="28" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source2" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>